PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['No Partisipan'], expName, expInfo['date'])
  Experiment info = {'No Partisipan': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save log file = False
  Save psydat file = False
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  blendMode = nofbo
  color = $[1, 1, 1]
  expName = WSAP
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Instruction
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    KeyboardComponent Start
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Start_Ins
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Tekan M untuk memulai.
      units = height
      wrapWidth = 1
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  Routine fix_cross
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    PolygonComponent Fixcross
      fillColor = $[-1, -1, -1]
      lineColor = $[-1, -1, -1]
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    TextComponent Prime
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $prime
      units = height
      wrapWidth = 1
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  Routine stimuli
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    TextComponent Stimuli
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $stimulus
      units = height
      wrapWidth = 2
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    KeyboardComponent Space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent Next
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 1
      text = Tekan <SPASI> untuk melanjutkan
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  Routine answer
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    TextComponent Question
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1
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      text:
        Apakah situasi tersebut cocok dengan kata yang muncul sebelumnya?

        Tekan 1 jika YA, tekan 0 jika TIDAK.
    KeyboardComponent Answer
      allowedKeys = '0','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine blank_screen
    RoutineSettingsComponent blank_screen
      stopVal [duration (s)] = 0
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  Routine End
    RoutineSettingsComponent End
      stopVal [duration (s)] = 3
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    TextComponent Exit
      color = $[-1, -1, -1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Mohon tunggu, sedang menyimpan data.
      units = height
      wrapWidth = 1
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    CodeComponent Exitcode
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString();
        }).join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'j8SbWj3G2vW7', // UPDATE WITH YOUR DATAPIPE EXPERIMENT ID
                filename: filename,
                data: data,
            }),
        })
        .then(response => response.json())
        .then(result => {
            // Log response and force experiment end
            console.log(result);
            quitPsychoJS();
        })
        .catch(err => {
            // Handle network or server errors
            console.error('Failed to save data:', err);
        });
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'Digosipi', 'stimulus': 'Saat saya masuk ruangan, beberapa orang berhenti berbicara.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Kebetulan', 'stimulus': 'Saat saya masuk ruangan, beberapa orang berhenti berbicara.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Diabaikan', 'stimulus': 'Pesan saya belum dibalas.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Sibuk', 'stimulus': 'Pesan saya belum dibalas.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Mengejek', 'stimulus': 'Seseorang tertawa setelah saya berbicara.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Terhibur', 'stimulus': 'Seseorang tertawa setelah saya berbicara.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Ditolak', 'stimulus': 'Pendapat saya tidak langsung ditanggapi dalam rapat.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Dipertimbangkan', 'stimulus': 'Pendapat saya tidak langsung ditanggapi dalam rapat.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Kesal', 'stimulus': 'Teman saya menjawab dengan singkat.', 'condition': 'negative', 'context': 'social'},
      {'prime': 'Buru-Buru', 'stimulus': 'Teman saya menjawab dengan singkat.', 'condition': 'positive', 'context': 'social'},
      {'prime': 'Tidak Suka', 'stimulus': 'Seseorang melihat saya lalu mengalihkan pandangan.', 'condition': 'negative', 'context': 'social'}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
    Routine fix_cross
    Routine stimuli
    Routine answer
  LoopTerminator trials
  Routine End
